PsychoPy2experiment version="2022.1.2"
Settings
  Audio latency priority = 4
  Audio lib = ptb
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1680, 1050]
  color = black
  expName = SS
  keyboardBackend = ioHub
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Routines
  Routine Consent_Form
    TextComponent consent_form_text
      letterHeight = 0.02
      pos = (0, 0.05)
      startVal [time (s)] = 0.0
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      text:
        ***Salient Structures***

        Consent Form

        Purpose: You are being asked to be a volunteer in a research study. The purpose of this study is to better understand the structural features that contribute to the violation of musical expectations, and the impact they have on our emotional experience while listening.


        Ethics: This study has been reviewed by the Georgia Tech Institutional Review Board, and has been identified as “Minimal risk research qualified for exemption status under 45 CFR 46 104d.2(iii). (Ethics ID # H19240).

        Duration: The survey should take approximately 30 minutes or less to complete. Your answers are extremely valuable to us and we thank you for participating in this survey.

        Confidentiality: The study data will be collected anonymously. Data obtained though this survey will only be connected to an anonymous identification number and will be securely stored on a password-protected and encrypted computer for a minimum of 5 years as per Georgia Tech policy. In any final published version of this research, the identity of survey participants will not be disclosed. Study records will be kept confidential to the extent required by law. To make sure that this research is being carried out in the proper way, the Georgia Institute of Technology IRB may review study records. The Office of Human Research Protections may also look at study records.

        Compensation & Rights: Your participation in this study is voluntary. There is no compensation for participating in this study. You may refuse or discontinue your voluntary participation in this research study at any time. However, only completed surveys will be included in our analysis. You do not waive any of your legal rights by agreeing to be in the study.
        Contacts and Questions: For questions, concerns, or complaints about the study, you may contact the P.I., Dr. Claire Arthur at: claire.arthur[at]gatech.edu or by telephone 404-894-9110. If you have any questions about your rights as a research subject, you may contact Ms. Melanie Clark, Georgia Institute of Technology at (404) 894-6942.

        Press ‘y’ if you wish to participate.
        Press ’n’ if you do not wish to participate.

        Note: To leave the experiment at any point you can hit the escape button twice.
    KeyboardComponent consent_resp
      allowedKeys = 'y', 'Y', 'n', 'N'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code
      Code Type = Auto->JS
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      End Routine:
        import random

        key = str(consent_resp.keys)
        print(key)

        if key.lower() == 'y':
            consent_yes_reps = 1
            consent_no_reps = 0
            valence_first = random.randint(0,1)
            valence_second = -1*valence_first + 1
        elif key.lower() == 'n':
            consent_yes_reps = 0
            consent_no_reps = 1
  Routine Annotations
    SoundComponent track
      sound [set every repeat] = $WavFileName
      startVal [time (s)] = 0
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  Routine Participant_Info
    FormComponent information_form
      Data Format = columns
      Font = Arial
      Item Padding = 0.05
      Items = csv_participant_information.xlsx
      Randomize = False
      Style = dark
      Text Height = 0.02
      disabled = True
      itemColor = white
      markerColor = red
      responseColor = white
      size = (1, 1)
      startVal [time (s)] = 0.0
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    ButtonComponent submit_button
      anchor = bottom-center
      bold = False
      borderColor = white
      borderWidth = 2
      disabled = True
      fillColor = grey
      forceEndRoutine = True
      letterHeight = 0.02
      pos = (0,-0.5)
      size = (0.2, 0.05)
      startVal [condition] = information_form.complete
      text = Submit
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    CodeComponent determine_song_groups
      Code Type = Auto->JS
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      End Routine:
        pg = 0;
        def getAG(num):
            return num+1 if num%2==0 else num-1

        vg = pg
        ag = getAG(pg)

        def get_row_start(gnum):
            return gnum*5
        def get_row_end(gnum, length):
            return gnum*5+length

        vg_start = get_row_start(vg)
        vg_end = get_row_end(vg, 5)
        vg_slice = slice(vg_start, vg_end)
        ag_start = get_row_start(ag)
        ag_end = get_row_end(ag, 5)
        ag_slice = slice(ag_start, ag_end)
    KeyboardComponent key_resp
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Thank_You_Regular
    TextComponent debrief
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        ***Thank you for your participating***

        A little bit about this expeirment: The purpose of this study is to better understand the structural features that contribute to the violation of musical expectations, and the impact they have on our emotional experience while listening.

        To know more click here!
  Routine Thank_You_Consent_No
    TextComponent text
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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      text:
        Thank you for your time.
  Routine Prompt
    TextComponent fixation_message
      letterHeight = 0.05
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
      text = Get ready for the clip! 
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    ButtonComponent btn_start_excerpt
      anchor = top-center
      bold = False
      borderColor = white
      borderWidth = 2
      disabled = True
      fillColor = grey
      forceEndRoutine = True
      letterHeight = 0.02
      size = (0.2, 0.05)
      startVal [time (s)] = 0
      text = Start excerpt
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    KeyboardComponent key_resp_2
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Valence_Prompt
    TextComponent Valence_Fixation_Message
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Get ready for the clip!

        You will be rating the music based on how happy/pleasant you believe it sounds.

        Use the slider to indicate how happy/pleasant you think the music is throughout the course of the song.

        Press any key to continue.
    KeyboardComponent valence_next
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Arousal_Prompt
    TextComponent Arousal_Fixation_Message
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Get ready for the clip!

        You will be rating the music based on how much energy you believe it has.

        Use the slider to indicate how energetic you think the music is throughout the course of the song.

        Press any key to continue.
    KeyboardComponent arousal_next
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Valence_Instructions
    TextComponent valence_instructions_text
      letterHeight = 0.02
      pos = (0, 0.05)
      startVal [time (s)] = 0.0
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      text:
        ***Instructions (please read carefully!)***

        In this experiment, you will listen to a series of short musical excerpts each less than one minute. You will click the button marked “start excerpt” to begin playing each excerpt. Once the music starts playing, you should listen attentively, paying careful attention to the changing chords (or harmony) in the song. There are lots of parts in music: the melody (the part you would sing along to), the rhythm or beat (the part you might tap your foot to), and the chords (I.e., the accompaniment/harmony, or, the remaining parts and instruments that sound together simultaneously in a harmonious way). This experiment will focus on chords.

        Press any key to continue.
    KeyboardComponent valence_instructions_resp
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Annotation_Instructions
    TextComponent annotations_instructions_text
      letterHeight = 0.02
      pos = (0, 0.05)
      startVal [time (s)] = 0.0
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      text:
        ***Instructions (please read carefully!)***

        In this experiment, you will listen to a series of short musical excerpts each less than one minute. You will click the button marked “start excerpt” to begin playing each excerpt. Once the music starts playing, you should listen attentively, paying careful attention to the changing chords (or harmony) in the song. There are lots of parts in music: the melody (the part you would sing along to), the rhythm or beat (the part you might tap your foot to), and the chords (I.e., the accompaniment/harmony, or, the remaining parts and instruments that sound together simultaneously in a harmonious way). This experiment will focus on chords.

        Press any key to continue.
    KeyboardComponent annotations_instructions_resp
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine get_songs
    CodeComponent song_code
      Code Type = Auto->JS
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      Begin Experiment:
        with open("number.txt", "r") as f:
            old_num = f.readlines()
            f.close()

        pg = int(old_num[0])
        new_num = pg + 1

        with open("number.txt", "w") as f:
            f.write(str(new_num))
            f.close()

        pg = int(old_num[0])

        def getVG(num):
            return (2*(num//10) + (num % 2))

        def getAG(num):
            return num+1 if num%2==0 else num-1

        vg = getVG(pg)
        ag = getAG(vg)

        def get_row_start(gnum):
            return gnum*5
        def get_row_end(gnum, length):
            return gnum*5+length

        vg_start = get_row_start(vg)
        vg_end = get_row_end(vg, 5)
        vg_slice = slice(vg_start, vg_end)
        ag_start = get_row_start(ag)
        ag_end = get_row_end(ag, 5)
        ag_slice = slice(ag_start, ag_end)
Flow
  Routine Consent_Form
  LoopInitiator consent_yes loopType="TrialHandler"
    loopType = random
    nReps = consent_yes_reps
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    Routine get_songs
    LoopInitiator is_valence_first loopType="TrialHandler"
      loopType = random
      nReps = valence_first
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      Routine Valence_Instructions
      LoopInitiator valenceAnnotationLoops loopType="TrialHandler"
        Selected rows = $vg_slice
        conditionsFile = fixed_sample.xlsx
        loopType = sequential
        nReps = 1
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        conditions:
          [{'fixed_sample': None},
          {'fixed_sample': 0},
          {'fixed_sample': 1},
          {'fixed_sample': 2},
          {'fixed_sample': 3},
          {'fixed_sample': 4},
          {'fixed_sample': 5},
          {'fixed_sample': 6},
          {'fixed_sample': 7},
          {'fixed_sample': 8},
          {'fixed_sample': 9},
          {'fixed_sample': 10},
          {'fixed_sample': 11},
          {'fixed_sample': 12},
          {'fixed_sample': 13},
          {'fixed_sample': 14},
          {'fixed_sample': 15},
          {'fixed_sample': 16},
          {'fixed_sample': 17},
          {'fixed_sample': 18},
          {'fixed_sample': 19},
          {'fixed_sample': 20},
          {'fixed_sample': 21},
          {'fixed_sample': 22},
          {'fixed_sample': 23},
          {'fixed_sample': 24},
          {'fixed_sample': 25},
          {'fixed_sample': 26},
          {'fixed_sample': 27},
          {'fixed_sample': 28},
          {'fixed_sample': 29},
          {'fixed_sample': 30},
          {'fixed_sample': 31},
          {'fixed_sample': 32},
          {'fixed_sample': 33},
          {'fixed_sample': 34},
          {'fixed_sample': 35},
          {'fixed_sample': 36},
          {'fixed_sample': 37},
          {'fixed_sample': 38},
          {'fixed_sample': 39},
          {'fixed_sample': 40},
          {'fixed_sample': 41},
          {'fixed_sample': 42},
          {'fixed_sample': 43},
          {'fixed_sample': 44},
          {'fixed_sample': 45},
          {'fixed_sample': 46},
          {'fixed_sample': 47},
          {'fixed_sample': 48},
          {'fixed_sample': 49},
          {'fixed_sample': 50},
          {'fixed_sample': 51},
          {'fixed_sample': 52},
          {'fixed_sample': 53},
          {'fixed_sample': 54},
          {'fixed_sample': 55},
          {'fixed_sample': 56},
          {'fixed_sample': 57},
          {'fixed_sample': 58},
          {'fixed_sample': 59},
          {'fixed_sample': 60},
          {'fixed_sample': 61},
          {'fixed_sample': 62},
          {'fixed_sample': 63},
          {'fixed_sample': 64},
          {'fixed_sample': 65},
          {'fixed_sample': 66},
          {'fixed_sample': 67},
          {'fixed_sample': 68},
          {'fixed_sample': 69},
          {'fixed_sample': 70},
          {'fixed_sample': 71},
          {'fixed_sample': 72},
          {'fixed_sample': 73}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
        Routine Valence_Prompt
        Routine Annotations
      LoopTerminator valenceAnnotationLoops
    LoopTerminator is_valence_first
    Routine Annotation_Instructions
    LoopInitiator arousalAnnotationLoops loopType="TrialHandler"
      Selected rows = $ag_slice
      conditionsFile = fixed_sample.xlsx
      loopType = random
      nReps = 1
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      conditions:
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      Routine Arousal_Prompt
      Routine Annotations
    LoopTerminator arousalAnnotationLoops
    LoopInitiator is_valence_second loopType="TrialHandler"
      loopType = random
      nReps = valence_second
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      Routine Valence_Instructions
      LoopInitiator valenceAnnotationLoops2 loopType="TrialHandler"
        loopType = random
        nReps = 5
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        Routine Valence_Prompt
        Routine Annotations
      LoopTerminator valenceAnnotationLoops2
    LoopTerminator is_valence_second
    Routine Thank_You_Regular
  LoopTerminator consent_yes
  LoopInitiator consent_no loopType="TrialHandler"
    loopType = random
    nReps = consent_no_reps
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    Routine Thank_You_Consent_No
  LoopTerminator consent_no
